/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "31817"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "33569"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "scale": 0.4,
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
