/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawSensablePhantom",
                "class-name": "mtsSensableHD",
                "constructor-arg": {
                    "Name": "Sensable"
                },
                "configure-parameter": "sawSensablePhantomDefault.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "Sensable",
            "interface": "armButton1"
        }
        ,
        "clutch": {
            "component": "Sensable",
            "interface": "armButton2"
        }
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "Sensable",
            "interface": "arm"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "ignore-jaw": true,
                "align-mtm": false,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
