/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28124.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-33281.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-31519.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-41878.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1"
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2"
        }
    ]
}
