/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide - THIS IS A S/Si TOOL! Longer shaft! "D" = 0.4670
    "DH": {
        "convention": "modified",
        "joints": [
            {
                /* for HSC, length of shaft is different.  On LND, distance from plate to axis 5 is 43cm.  On HSC it's 30cm.   So we substract 13cm from LND "D": 0.4670 - 0.015 = 0.445*/
                "name": "outer_roll",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.4450,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -4.53786, // -260 degrees
                "qmax":  4.53786, //  260 degrees
                "ftmax": 0.33
            },
            {
                "name": "outer_wrist_pitch",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -1.39626, // -80 degrees
                "qmax":  1.39626, //  80 degrees
                "ftmax": 0.25
            },
            {
                "name": "outer_wrist_yaw",
                "alpha": -1.5708, "A":  0.0091, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -1.39626, // -80 degrees
                "qmax":  1.39626, //  80 degrees
                "ftmax": 0.20
            }
        ]
    }
    ,
    "jaw" : {
        // for last joint, manual says [0, 30] but we need -20 to allow stronger torque, 80 to open wide
        "qmin": -0.349066, // -20 degrees
        "qmax":  1.39626,  //  80 degrees
        "ftmax": 0.16
    }
    ,
    // rotation to match ISI convention (for read-only research API on commercial da Vinci)
    "tooltip-offset" : [[ 0.0, -1.0,  0.0,  0.0],
                        [ 0.0,  0.0,  1.0,  0.0],
                        [-1.0,  0.0,  0.0,  0.0],
                        [ 0.0,  0.0,  0.0,  1.0]]
    ,
    // values from the dVRK user guide, see tool appendix C
    "coupling" : {
        "ActuatorToJointPosition" : [[ -1.5632,  0.0000,  0.0000,  0.0000],
                                     [  0.0000,  1.0186,  0.0000,  0.0000],
                                     [  0.0000, -0.8306,  0.6089,  0.6089],
                                     [  0.0000,  0.0000, -1.2177,  1.2177]]
    }
    ,
    // angles used to engage the tool, in radians
    // make sure these are within the range of motion IN the cannula
    // 263, 15, 15, 0 degrees
    "tool-engage-position" : {
        "lower" : [-0.0, -0.0, -0.0, 0.0],
        "upper" : [ 0.0,  0.0,  0.0, 0.0]
    }
}
