/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_DERIVED",
            "io": "sawRobotIO1394-PSM1-19363.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM_DERIVED",
            "io": "sawRobotIO1394-PSM2-17547.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-foot-pedal-23120.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-11591.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
