/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTMR-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "25975"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "28687"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "21768"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
