/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    },
    "component-manager": {
        "components": [
            {
                "shared-library": "sawIntuitiveResearchKitBilateralTeleop",
                "class-name": "mtsBilateralTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            }
        ]
    },
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "system": "jhu-dVRK",
            "serial": "27374",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "system": "jhu-dVRK",
            "serial": "22723",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "type": "TELEOP_PSM_DERIVED",
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.5
            }
        }
    ]
}
