/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO",
            "port": "fw",
            "protocol": "broadcast-query-read-write"
        }
    ],
    "component_manager": {
        "components": [
            {
                "shared-library": "sawIntuitiveResearchKitBilateralTeleop",
                "class-name": "mtsBilateralTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML_PSM2",
                    "Period": 0.001
                },
                "configure-parameter": "MTML_PSM2_teleop_config.json"
            }
        ]
    },
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "27374",
            "IO": "IO",
            "base_frame": {
                "reference_frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "system": "jhu-dVRK",
            "serial": "22723",
            "IO": "IO",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_ONLY",
            "IO_pedals": {
                "IO": "IO",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTML",
                    "PSM": "PSM2"
                }
            ]
        }
    ]
}
