/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "ECM",
            "simulated_position": [0.3079020566881523, 1.1432499826443978, -1.9844024129709243, 0.790592362875],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.1471,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.5861,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.3302, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.3302, "theta": 0.0000, "D": 0.0549,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.1352, "theta":-1.2217, "D": 0.0000, // -70 degrees = -1.2217 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [0.0 , 0.1262, 0.0],
                "Rotation" : [[ 0.0, -1.0,  0.0],
                              [ 1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM1",
            "simulated_position": [0.21713328162535497, -0.28985294982172416, -1.296300785720703, -1.081429816020683],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.1471,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.6654,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D":-0.1301,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0490, "theta":-0.7854, "D": 0.0000, // -45 degrees = -0.7854 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [-0.2019 , -0.0757, 0.0],
                "Rotation" : [[-1.0,  0.0,  0.0],
                              [ 0.0, -1.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM2",
            "simulated_position": [0.19430774368524248, 0.2521927675957645, 1.463079476018301, 0.8695928416300226],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.1471,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.6654,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D":-0.1301,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0490, "theta":-0.7854, "D": 0.0000, // -45 degrees = -0.7854 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [0.2019 , -0.0757, 0.0],
                "Rotation" : [[ 1.0,  0.0,  0.0],
                              [ 0.0,  1.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM3",
            "simulated_position": [0.2806527579034114, 1.6766721211508346, 0.048778656425950806, 1.471882438882154, 0.43725492343646566],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.0455,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.5887,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.3429, "theta": 0.0000, "D":-0.2667,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D":-0.1864,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0483, "theta":-0.2618, "D": 0.0000, // -15 degrees = -0.2618 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [0.0 , -0.2776, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
    ]
}
