/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "simulated_position": [0.6647, 0.5782, -1.2662, 3.7818, 0.0, 0.0],
            "plug_number": 1,
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.4166,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": -0.3459,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": -0.7853, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": -0.0667, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0000
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [0.0000 , 0.0000, 0.4300],
                "Rotation" : [[ 0.0000,  -1.0000,  0.0000],
                              [1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.6126, 0.0000,   0.1016],
                "Rotation" : [[ 0.0000, 1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulated_position": [0.0007, -0.5892, -0.8590, -0.6241, -0.2479, -0.4422],
            "plug_number": 2,
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.4166,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": -0.1302,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.4089,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": -1.5708, "A": 0.0000, "theta": 0.0000, "D": -0.1029,
                        "type": "revolute",
                        "mode": "active",
                        "offset": -1.5708
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [-0.1016 , -0.1016, 0.4300],
                "Rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.4864, 0.0000, 0.1524],
                "Rotation" : [[ 0.0000, 1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulated_position": [0.0628, 0.0913, 1.9073, -0.1297, 0.4351, 0.0353],
            "plug_number": 3,
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.4166,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": -0.1302,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.4089,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": -1.5708, "A": 0.0000, "theta": 0.0000, "D": -0.1029,
                        "type": "revolute",
                        "mode": "active",
                        "offset": -1.5708
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [0.1016 , -0.1016, 0.4300],
                "Rotation" : [[ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.4864, 0.0000, 0.1524],
                "Rotation" : [[ 0.0000, 1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "Motorized PSM",
            "simulated_position": [-0.0261, -1.5892, 1.3076, 0.6994, 0.1361, 0.3359],
            "plug_number": 4,
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.3404,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.5842, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.2571,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.4089,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": -1.5708, "A": 0.0000, "theta": 0.0000, "D": -0.1029,
                        "type": "revolute",
                        "mode": "active",
                        "offset": -1.5708
                    }
                ]
            },
            "world_origin_to_SUJ": {
                "Translation": [0.0000 , 0.0000, 0.1264],
                "Rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ_tip_to_tool_origin": {
                "Translation": [0.4864, 0.0000, 0.1524],
                "Rotation" : [[ 0.0000,  1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
