/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSMexperimental",
                "class-name": "mtsDerivedTeleOperationPSMexperimental",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            }
            ,
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSMexperimental",
                "class-name": "mtsDerivedTeleOperationPSMexperimental",
                "constructor-arg": {
                    "Name": "MTMR-PSM1",
                    "Period": 0.001
                }
            }
        ]
    }
    ,
    "io":
    {
        "footpedals": "sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-31817.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm1-15-deg-large-needle-driver-circle-cut.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-28060.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm2-15-deg-large-needle-driver-circle-cut.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-13879.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-28129.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "rotation" : [[ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
