/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSMexperimental",
                "class-name": "mtsDerivedTeleOperationPSMexperimental",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            }
        ]
    }
    ,
    "io":
    {
        "footpedals": "sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-28060.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-28129.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
