/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSMexperimental",
                "class-name": "mtsDerivedTeleOperationPSMexperimental",
                "constructor-arg": {
                    "Name": "MTMR-PSM1",
                    "Period": 0.001
                }
            }
        ]
    }
    ,
    "io": 
    {
        "footpedals": "sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-31817.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver-tip.json",
            "base-frame": {
            "reference-frame": "TableCenter",
            "transform": [[ 0.965925826, -0.258819045, 0.0,   0.0868201],
                          [ 0.258819045,  0.965925826, 0.0,  -0.110485],
                          [ 0.0,          0.0,         1.0,   0.0],
                          [ 0.0,          0.0,         0.0,  1.0]]
            }

        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-28060.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver-tip.json",
            "base-frame": {
            "reference-frame": "TableCenter",
            "transform": [[  0.965925826,  0.258819045, 0.0,  -0.110619],
                          [ -0.258819045,  0.965925826, 0.0,  -0.100955],
                          [  0.0,          0.0,         1.0,   0.0],
                          [  0.0,          0.0,         0.0,   1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-33569.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-33569.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-28129.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm": "MTML-28129.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "type": "TELEOP_PSM_DERIVED",
            "master": "MTMR",
            "slave": "PSM1",
            "configure-parameter" : {
                "rotation" : [[ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2"
        }
    ]
}
