/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
    }
    ,
    "operator-present": {
        "component": "io",
        "interface": "COAG"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM_DERIVED",
            "io": "xml/sawRobotIO1394-PSM2-28275.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }    
        ,
        {
            "name": "MTML",
            "type": "MTM_DERIVED",
            "io": "xml/sawRobotIO1394-MTML-foot-pedal-30594.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../dvmtm.rob"
        }        
    ]
    ,
    "psm-teleops":
    [
        {
            "type": "TELEOP_PSM_GENERIC",
            "master": "MTML",
            "slave": "PSM2"            
        }    
    ]
}