/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
        //"has-footpedals": true // default is false unless there are some teleop components
    }
    ,
    "operator-present": {
        "component": "io",
        "interface": "COAG"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-28275.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-foot-pedal-30594.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../dvmtm.rob"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM2",
            "period": 0.005, // in seconds
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
