/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTMR.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "ForceDimensionSDK",
            "interface": "MTMR-Center"
        }
        ,
        "clutch": {
            "component": "ForceDimensionSDK",
            "interface": "MTMR-Top"
        }
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTMR"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "rotation" : [[ 0.0000, -1.0000,  0.0000],
                          [ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
