/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTMR.json"
            }
            ,
            {
                "shared-library": "sawKeyboard",
                "class-name": "mtsKeyboard",
                "constructor-arg": {
                    "Name": "Keyboard"
                }
                ,
                "configure-parameter": "sawKeyboard-dVRK-console.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "Keyboard",
            "interface": "OperatorPresent" // see file keyboard-dVRK-console.json
        }
        ,
        "clutch": {
            "component": "Keyboard",
            "interface": "Clutch"
        }
        ,
        "camera": {
            "component": "Keyboard",
            "interface": "Camera"
        }
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTMR"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json"
        }
    ]
    ,
    "PSM-teleops":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "configure-parameter": {
                "start_gripper_threshold": 0.0,
                "ignore_jaw": true,
                "scale": 0.4,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
