/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "physical-footpedals-required": false
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_SOCKET",
            "remote-ip": "localhost",
            "port": 10001
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "simulation": "KINEMATIC",
            "arm": "arm/MTMR_KIN_SIMULATED.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
