/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "physical-footpedals-required": false
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "simulation": "KINEMATIC",
            "arm": "arm/MTML_KIN_SIMULATED.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "simulation": "KINEMATIC",
            "arm": "arm/MTMR_KIN_SIMULATED.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "SUJ",
            "type": "SUJ",
            "simulation": "KINEMATIC",
            "kinematic": "arm/suj-simulated.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "arm": "arm/ECM_KIN_SIMULATED_STRAIGHT.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "start-gripper-threshold": 0.0 // to start automatically when operator is present
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter": {
                "start-gripper-threshold": 0.0 // to start automatically when operator is present
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM3",
            "configure-parameter": {
                "start-gripper-threshold": 0.0 // to start automatically when operator is present
            }
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
