/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-IOAB-SD-PSM2-28124.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-IO45-SD-MTML-foot-pedal-41878.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
