/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            /*"simulation": "KINEMATIC",*/
            "io": "sawRobotIO1394-IO45-SD-MTMR-foot-pedal-28002.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        },
        {
            "name": "MTML",
            "type": "MTM",
            /*"simulation": "KINEMATIC",*/
            "io": "sawRobotIO1394-SD-MTML-41878.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
}
