/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{

    "io": 
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-27110.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-31717.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-79526.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-55264.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM2"
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM1"
        }
    ]
}
