/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "operator-present": {
        "io": "io/sawRobotIO1394-MTMR-dv-head-sensor.xml"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTML-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738"
        }
    ]
}
