/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
            "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-30739.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-29341.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-59679.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-26552.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-60600.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
