/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
    }
    ,
    "operator-present": {
        "component": "io",
        "interface": "COAG"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_DERIVED",  //PSM_DERIVED for derived class
            "io": "sawRobotIO1394-PSM1-33060.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-20115-foot-pedal.xml",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "../dvmtm.rob"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "period": 0.005, // in seconds
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
