/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml",
        "firewire-protocol": "sequential-read-write" // for debugging
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_Si",
            "serial": "586288"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
