/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
     "component-manager": {
        "components":
        [
            {
                "shared-library": "sawJoystick",
                "class-name": "mtsJoystick",
                "constructor-arg": {
                    "Name": "joystick"
                },
                "configure-parameter": "misc/sawJoystickConfiguration.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "joystick",
            "interface": "OperatorPresent"
        }
        ,
        "clutch": {
            "component": "joystick",
            "interface": "Clutch"
        }
    }
    ,
    "io":
    {
        "firewire-protocol": "broadcast-read-write"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "28007",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM1"
        }
    ]
}
