/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_SOCKET",
            "remote-ip": "localhost",
            "port": 10001
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM1",
            "configure-parameter": {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
