/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base-frame": {
                "reference-frame": "Mount",
                "transform": [[ -1.0,  0.0,  0.0,  0.0],
                              [  0.0, -1.0,  0.0,  0.0 ],
                              [  0.0,  0.0,  1.0,  0.0 ],
                              [  0.0,  0.0,  0.0,  1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.4,
                "gripper-scaling": {
                    "max": 1.0472, // 60 degrees
                    "zero": -0.52  // set value below zero, MTM can go much lower - zero will correspond to PSM jaws at 0 position
                }
            }
        }
    ]
}
