/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28007.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-22723.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtml.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-28247.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM"
    }
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1"
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2"
        }
    ]
}
