/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-22723.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm": "MTML-22723.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-28247.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-28247.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2"
        }
    ]
}
