/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // Search for CUSTOM to see changes examples of changes for a custom instrument
    
    // see dVRK user guide
    "DH": {
        "convention": "modified",
        "joints": [
            {
                "name": "outer_yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -4.71239, // -270
                "qmax": 4.71239,  //  270
                "ftmax": 3.316101
            },
            {
                "name": "outer_pitch",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.925025, // -53
                "qmax":  0.925025, //  53
                "ftmax": 3.316101
            },
            {
                "name": "outer_insertion",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "prismatic",
                "mode": "active",
                "offset": -0.4318,
                "qmin": 0.0,
                // CUSTOM: change the maximum amount of travel allowed
                // on the translation stage.  This can be used if your
                // new instrument has something attached on the shaft
                // above the cannula.  Reducing the maximum depth can
                // prevent collisions between the cannula and whatever
                // is attached on the shaft
                "qmax": 0.20,  // default is 240 mm
                "ftmax": 9.877926
            }
        ]
    }
}
