/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-32336.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtml.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM",
        "rotation" : [[ 1.0000,  0.0000,  0.0000],
                      [ 0.0000,  1.0000,  0.0000],
                      [ 0.0000,  0.0000,  1.0000]]
    }
}
