/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals" : "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtml.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-32336.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr.json"
        }
    ]
}
