/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "MTML.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM2"
        }
    ]
}
