/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // this is to use the dvrk_arm_from_ros class
            {
                "shared-library": "dvrk_arm_from_ros",
                "class-name": "dvrk_psm_from_ros",
                "constructor-arg": {
                    "Name": "PSM1",
                    "Period": 0.01
                }
            }
        ]
    }
    ,
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336"
        }
        ,
        {
            "name": "PSM1",  // created previously using custom components
            "type": "PSM_GENERIC",
            "component": "PSM1",
            "interface": "PSM1",
            "skip-ros-bridge": true
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
    ]

}
