/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "firewire-protocol" : "broadcast-read-write",
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM3",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM3-28613.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-32336.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM3",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
			              [ 0.0000, -1.0000,  0.0000],
			              [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
