/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-49695.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM3-28613.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "../sawControllersPID-ECM.xml",
            "kinematic": "../dvecm.rob",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-22403-foot-pedal.xml",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "../mtmr.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../mtml.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "period": 0.005, // in seconds
            "rotation" : [[ 0.0000,  1.0000,  0.0000],
                          [ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  0.0000, -1.0000]]
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM3",
            "period": 0.005, // in seconds
            "rotation" : [[ 0.0000,  1.0000,  0.0000],
                          [ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  0.0000, -1.0000]]
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM",
        "rotation" : [[ 1.0000,  0.0000,  0.0000],
                      [ 0.0000,  1.0000,  0.0000],
                      [ 0.0000,  0.0000,  1.0000]]
    }
}
