/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
    }
    ,
    "operator-present": {
        "component": "io",
        "interface": "COAG"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-calibrated.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-49695.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-32204.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "../sawControllersPID-ECM.xml",
            "kinematic": "../dvecm.rob",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-22403-foot-pedal.xml",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "../dvmtm.rob"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "period": 0.005, // in seconds
            "rotation" : [[ 0.0000,  1.0000,  0.0000],
			              [ 1.0000,  0.0000,  0.0000],
			              [ 0.0000,  0.0000, -1.0000]]
        }
    ]
}
