/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-0-1-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-49695.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM3-28613.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "../sawControllersPID-ECM.xml",
            "kinematic": "../dvecm.rob",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
