/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-49695.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
