/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
        , "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "operator-present": {
        "io": "sawRobotIO1394-MTMR-dv-head-sensor.xml"
    }
    ,
    "endoscope-focus": {
        "io": "sawRobotIO1394-MTML-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
