/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */

{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "jhu-daVinci/sawRobotIO1394-SUJ.xml",
            "kinematic": "jhu-daVinci/suj_modified.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        //{
        //    "name": "PSM1",
        //    "type": "PSM",
        //    "io": "jhu-daVinci/sawRobotIO1394-PSM1-49695.xml",
        //    "pid": "sawControllersPID-PSM.xml",
        //    "kinematic": "dvpsm.rob",
        //    "base-frame": {
        //        "component": "SUJ",
        //        "interface": "PSM1"
        //    }
        //}
        //,
        //{
        //    "name": "PSM2",
        //    "type": "PSM",
        //    "io": "jhu-daVinci/sawRobotIO1394-PSM2-32204.xml",
        //    "pid": "sawControllersPID-PSM.xml",
        //    "kinematic": "dvpsm.rob",
        //    "base-frame": {
        //       "component": "SUJ",
        //        "interface": "PSM2"
        //    }
        //}
        //,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "jhu-daVinci/sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "dvecm.rob",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
