/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide
    "DH": {
        "convention": "modified",
        "links": [
            { // 1
                "name": "yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -2.964,
                "qmax":  2.964,
                "ftmax": 17.0845 // maxA / Nm_to_A from sawRobotIO
            },
            { // 2
                "name": "pitch",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -1.10,
                "qmax":  1.04,
                "ftmax": 34.0845 // maxA / Nm_to_A from sawRobotIO
            },
            { // 3
                "name": "insertion",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "prismatic",
                "mode": "active",
                "offset": -0.3822,
                "qmin": 0.001,
                "qmax": 0.259, // meters
                "ftmax": 70.900, // maxA / Nm_to_A from sawRobotIO
                "mass": 0.0000, // mass is set in code, depending on endoscope type
                "cx":   0.0000, "cy":   0.0000, "cz":  -0.1000, // approximative position of endoscope center of gravity
                "Ixx":  0.0001, "Iyy":  0.0001, "Izz":  0.0001,
                "x1":   1.0000, "x2":   0.0000, "x3":   0.0000,
                "y1":   0.0000, "y2":   1.0000, "y3":   0.0000,
                "z1":   0.0000, "z2":   0.0000, "z3":   1.0000
            },
            { // 4
                "name": "roll",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.3829,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -1.54, // almost -90
                "qmax":  1.54, // almost  90
                "ftmax": 6.81923 // maxA / Nm_to_A from sawRobotIO
            }
        ]
    }
}
