/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide and mtmr.json
    "DH": {
        "convention": "standard",
        "links": [
            { // 1
                "name": "outer_yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  -1.5708,
                "qmin": -0.698132, // -40.0
                "qmax":  1.13446,  //  65.0 
                "ftmax": 1.86082986
            },
            { // 2
                "name": "shoulder_pitch",
                "alpha":  0.0000, "A":  0.2794, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.261799, // -15.0
                "qmax":  1.13446, //  65.0
                "ftmax": 3.21661506
            },
            { // 3
                "name": "elbow_pitch",
                "alpha": -1.5708, "A":  0.3645, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -0.872665, // -35.0
                "qmax":  0.610865, //  48.0
                "ftmax":  1.95978284
            },
            { // 4
                "name": "wrist_platform",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.1506,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -3.5779, // -205.0
                "qmax":  1.6580, //  95.0
                "ftmax": 0.30901338
            },
            { // 5
                "name": "wrist_pitch",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -1.6580, // -95.0
                "qmax":  3.2288, //  185.0
                "ftmax": 0.09684378
            },
            { // 6
                "name": "wrist_yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.785398, // -45.0
                "qmax":  0.785398, //  45.0
                "ftmax": 0.09684378
            },
            { // 7
                "name": "wrist_roll",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -8.37758, // -480.0
                "qmax":  7.85398, //  450.0
                "ftmax": 0.02287592
            }
        ]
    }
    ,
    "coupling" : {
        "ActuatorToJointPosition": [[  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000, -1.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000,  0.6697, -0.6697,  1.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000,  0.0000,  0.0000,  0.0000,  1.0000,  0.0000,  0.0000],
                                    [  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  1.0000,  0.0000],
                                    [  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  1.0000]]
    }
}
