/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see dVRK user guide
    "DH": {
        "convention": "standard",
        "links": [
            { // 1
                "name": "outer_yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  -1.5708,
                "qmin": -1.13446,  // -65   - manual says -1.277 but we can go further
                "qmax":  0.698132, //  40.0 - manual says 0.783 but we can't reach that far
                "ftmax": 1.86082986
            },
            { // 2
                "name": "shoulder_pitch",
                "alpha":  0.0000, "A":  0.2794, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.31416, // -18.0 - manual says -0.352 but we can't reach that far
                "qmax":  1.13446, //  65.0 - manual says 1.1633 ~66.65, we're rounding down
                "ftmax": 3.21661506
            },
            { // 3
                "name": "elbow_pitch",
                "alpha": -1.5708, "A":  0.3645, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -0.872665, // -35.0 - manual says -0.2416 ~-13.84 but we can go further
                "qmax":  0.610865, //  48.0 - manual says 0.73519 ~42.1 but we can go further
                "ftmax":  1.95978284
            },
            { // 4
                "name": "wrist_platform",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.1506,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -1.6580, // -95.0 - manual says 1.6799 ~96.25, we're rounding down
                "qmax":  3.5779, //  205.0 - manual says 3.5997 ~206.2, we're rounding down
                "ftmax": 0.30901338
            },
            { // 5
                "name": "wrist_pitch",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000,
                "qmin": -1.6580, // -95.0 - manual says -1.7055 ~-97.7 but we can't reach that far
                "qmax":  3.2288, //  185.0 - manual says 3.2763 ~187.7, we're rounding down
                "ftmax": 0.09684378
            },
            { // 6
                "name": "wrist_yaw",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -0.785398, // -45.0 - manual says -0.8194 ~-46.95 but we can't reach that far
                "qmax":  0.785398, //  45.0 - see above
                "ftmax": 0.09684378
            },
            { // 7
                "name": "wrist_roll",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708,
                "qmin": -8.37758, // -480.0
                "qmax":  7.85398, //  450.0
                "ftmax": 0.02287592
            }
        ]
    }
    ,
    "coupling" : {
        "ActuatorToJointPosition": [[  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000, -1.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000,  0.6697, -0.6697,  1.0000,  0.0000,  0.0000,  0.0000],
                                    [  0.0000,  0.0000,  0.0000,  0.0000,  1.0000,  0.0000,  0.0000],
                                    [  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  1.0000,  0.0000],
                                    [  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  1.0000]]
    }
}
