/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
	"DH": {
		"links": [
		    {
			    "convention": "modified",
			    "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
			    "type": "revolute",
			    "mode": "active",
			    "offset":  1.5708
		    },
		    {
			    "convention": "modified",
			    "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
			    "type": "revolute",
			    "mode": "active",
			    "offset": -1.5708
		    },
		    {
			    "convention": "modified",
			    "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
			    "type": "prismatic",
			    "mode": "active",
			    "offset": -0.4318
		    },
		    {
			    "convention": "modified",
			    "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D": -0.4162,
			    "type": "revolute",
			    "mode": "active",
			    "offset":  0.0000
		    },
		    {
			    "convention": "modified",
			    "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
			    "type": "revolute",
			    "mode": "active",
			    "offset": -1.5708
		    },
		    {
			    "convention": "modified",
			    "alpha": -1.5708, "A":  0.0091, "theta":  0.0000, "D":  0.0000,
			    "type": "revolute",
			    "mode": "active",
			    "offset": -1.5708
		    }
		]
	}
    ,
    "tooltip-offset" : [[ 0.0, -1.0,  0.0,  0.0],
                        [ 0.0,  0.0,  1.0,  0.0],
                        [-1.0,  0.0,  0.0,  0.0],
                        [ 0.0,  0.0,  0.0,  1.0]]
    ,
    "coupling" : {
        "ActuatorToJointPosition" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000, -1.5632,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  1.0186,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000, -0.8306,  0.6089,  0.6089],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000, -1.2177,  1.2177]]
        ,
        "JointToActuatorPosition" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000, -0.6397,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.9817,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.6696,  0.8212, -0.4106],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.6696,  0.8212,  0.4106]]
        ,
        "ActuatorToJointEffort" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000, -0.6397,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.9817,  0.6696,  0.6696],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.8212,  0.8212],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000, -0.4106,  0.4106]]
        ,
        "JointToActuatorEffort" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  -1.5632, 0.0000,  0.0000,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  1.0186, -0.8306,  0.0000],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.6089, -1.2177],
                                   [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.6089,  1.2177]]
    }
    ,
    // angles used to engage the tool, in degrees - make sure these are within the range of motion IN the cannula
    "tool-engage-angles" : {
        "lower" : [0.0, 0.0, 0.0, -200.0, -15.0,  15.0, 0.0],
        "upper" : [0.0, 0.0, 0.0,  200.0,  15.0, -15.0, 0.0]
    }
}
