{
    "$schema": "http://json-schema.org/draft-07/schema#",
    "$id": "https://github.com/jhu-dvrk/sawIntuitiveResearchKit/schemas/console.schema.json",
    "title": "dVRK-console",
    "type": "object",
    "properties": {

        "chatty": {
            "type": "boolean",
            "description": "Make the console say something stupid when it starts.  It's mostly a way to test the text-to-speech feature.",
            "default": false
        },

        "io": {
            "type": "object",
            "properties": {

                "firewire-protocol": {
                    "type": "string",
                    "description": "Protocol used for all FireWire communications.  This applies wether the controllers are connected to the computer using FireWired or Ethernet (UDP with Link-Local).",
                    "enum": ["sequential-read-write",  "sequential-read-broadcast-write", "broadcast-read-write"],
                    "default": "sequential-read-broadcast-write"
                },

		"port": {
		    "type": "string",
		    "description": "Port used communicate between the computer and the dVRK controllers.  Accepted values are \"fw\", \"fw:X\" (X is FireWire port), \"udp\" or \"udp:xx.xx.xx.xx\" (xx.xx.xx.xx is the IP address of the dVRK controller.  Default controller address is 169.254.0.100.  Values are parsed by `BasePort::ParseOptions` in library Amp1394.",
		    "pattern": "^fw$|^fw:[0-9]$|^udp$|^udp:[0-9]{2,3}.[0-9]{2,3}.[0-9]{2,3}.[0-9]{2,3}$"
		},

		"footpedals": {
		    "type": "string",
		    "description": "IO configuration file used to define inputs from the foot pedals.  See files `sawRobotIO1394-*-foot-pedals.xml` in directory `share/io`."
		}

            },
            "additionalProperties": false
        }
    }
}
