{
  "$schema": "http://json-schema.org/draft-07/schema#",
  "$id": "https://github.com/jhu-dvrk/sawIntuitiveResearchKit/schemas/console.schema.json",
  "title": "dVRK-console",
  "type": "object",
  "properties": {
    "io": {
      "type": "object",
      "properties": {
        "port": {
          "type": "string",
          "description": "Port used communicate between the computer and the dVRK controllers.  Accepted values are \"fw\", \"fw:X\" (X is FireWire port), \"udp\" or \"udp:xx.xx.xx.xx\" (xx.xx.xx.xx is the IP address of the dVRK controller.  Default controller address is 169.254.0.100.  Values are parsed by `BasePort::ParseOptions` in library Amp1394.",
          "pattern": "^fw$|^fw:[0-9]$|^udp$|^udp:[0-9]{2,3}.[0-9]{2,3}.[0-9]{2,3}.[0-9]{2,3}"
        },
        "firewire-protocol": {
          "type": "string",
          "description": "Protocol used for all FireWire communications.  This applies wether the controllers are connected to the computer using FireWired or Ethernet (UDP with Link-Local).  This is an advanced setting and most users should avoid defining it.",
          "enum": ["sequential-read-write", "sequential-read-broadcast-write", "broadcast-read-write"],
          "default": "sequential-read-broadcast-write"
        },
        "footpedals": {
          "type": "string",
          "description": "IO configuration file used to define inputs from the foot pedals.  See files `sawRobotIO1394-*-foot-pedals.xml` in directory `share/io`."
        },
        "period": {
          "type": "number",
          "description": "Periodicity for the IO and PID loop.  Defined in seconds, i.e. interval between two iterations.  The default is defined in `mtsIntuitiveResearchKit.h` and is set so the loop frequency is 1500Hz, ~0.66ms so 0.00066s.  This is an advanced setting and most users should avoid defining it.",
          "exclusiveMinimum": 0
        },
        "watchdog-timeout": {
          "type": "double",
          "description": "Maximum laps of time allowed between to read/write access to the controller.  It is used to detect abnormally slow IOs or disconnected cables.  The value is sent to the controllers and the controllers will turn off power if the communication loop time exceeds the watchdog timeout.  Defined in seconds.  The default is defined in `mtsIntuitiveResearchKit.h` and is set to 30ms.  This is an advanced setting and most users should avoid defining it.  Setting it to zero disables the watchdog and should only be used by experts.  The maximum value is 300ms, i.e. 0.3s",
          "minimum": 0,
          "maximum": 0.3
        },
        "configuration-files": {"type": "array", "items": {"type": "string"}}
      },
      "additionalProperties": false
    },
    "chatty": {
      "type": "boolean",
      "description": "Make the console say something useless when it starts.  It's mostly a way to test the text-to-speech feature.",
      "default": false
    }
  }
}
