/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
		{
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-foot-pedal-35185_cal.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-26509_cal.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        
        
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "rotation" : [[ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
