/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
		{
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-foot-pedal-35185_cal.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-29470_cal.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        
        
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM2",
            "rotation" : [[ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
