/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */

{
    "io": {
        "period": 0.5, // default is 0.5
        "port": 0 // default is 0
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-22403.xml",
            //         "io": "sawRobotIO1394-MTML-22723.xml",
            "pid": "sawControllersPID-MTM.xml",
            "kinematic": "dvmtm.rob"
        }
    ]
    ,
    "pairs":
    [
        {
            "master": {
                "name": "MTML"
            }
            ,
            "slave": {
                "name": "PSM1",
                "io": "sawRobotIO1394-PSM1-49695.xml",
                "pid": "sawControllersPID-PSM.xml",
                "kinematic": "dvpsm.rob"
            }
        }
    ]
}
