/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,    
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-37059.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,        
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-26782.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-pro-grasp.json",
            "base-frame": {
             "reference-frame": "ECM",
             "transform":    [[  -0.5735764364,  -0.8191520443, 0.0000000000, -0.20],
                              [  -0.8191520443,  0.5735764364, 0.0000000000, 0.0 ],
                              [  0.0000000000,  0.0000000000, -1.0000000000, 0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM3-25389.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
             "transform":    [[  -0.9948294479,  0.0870362988, 0.0523359562, 0.20],
                              [  0.0897649282,  0.9945907237, 0.0522642316, 0.0 ],
                              [  -0.0475039713,  0.0566919301, -0.9972609477, 0.0 ],
                            [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-81503.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-81503.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-76673.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm": "MTML-76673.json",
             "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM",
        "configure-parameter": {
        "ignore-jaw": true,
        "scale": 0.4,
        "rotation" : [[ 1.0000,  0.0000,  0.0000],
                      [ 0.0000,  1.0000,  0.0000],
                      [ 0.0000,  0.0000,  1.0000]]
        }
    }
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "configure-parameter": {
            "ignore-jaw": false,
            "scale": 0.4,
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM3",
            "configure-parameter": {
            "ignore-jaw": false,
            "scale": 0.4,
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
