/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    },
    "arms":
    [

        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-37059.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,        
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-26782.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-pro-grasp.json",
            "base-frame": {
             "reference-frame": "ECM",
           "transform":    [[  -0.9575572771,  -0.2472166085, 0.1482160908, -0.20],
                              [  -0.1976926041,  0.1890606660, -0.9618595006, 0.0 ],
                              [  0.2097658107,  -0.9503367893, -0.2299093117, 0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
        }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-81503.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-81503.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
        }
        }
    ]
    ,

    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "configure-parameter": {
            "ignore-jaw": false,
            "scale": 0.4,
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
