/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,    
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29875.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,        
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-45407.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-pro-grasp.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-11415.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-81085.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-65806.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json",
             "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM",
        "configure-parameter": {
//        "ignore-jaw": true,
//        "scale": 0.4,
        "rotation" : [[ 1.0000,  0.0000,  0.0000],
                      [ 0.0000,  1.0000,  0.0000],
                      [ 0.0000,  0.0000,  1.0000]]
        }
    }
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "configure-parameter": {
            "ignore-jaw": true,
            "scale": 0.4,
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "configure-parameter": {
            "ignore-jaw": true,
            "scale": 0.4,
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
