/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-65806.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-81085.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM"
    }
}
