/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    },
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-45407.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-65806.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,

    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM1", 
            "configure-parameter": {
                "ignore-jaw": true,
                "scale": 0.4,
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
