/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
"component-manager": {
        "components":
        [
            {
                "shared-library": "sawKeyboard",
                "class-name": "mtsKeyboard",
                "constructor-arg": {
                    "Name": "Keyboard"
                }
                ,
                "configure-parameter": "sawKeyboard-dVRK-console.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "Keyboard",
            "interface": "OperatorPresent" // see file keyboard-dVRK-console.json
        }
        ,
        "clutch": {
            "component": "Keyboard",
            "interface": "Clutch"
        }
        ,
        "camera": {
            "component": "Keyboard",
            "interface": "Camera"
        }
    }
    ,    
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-32529.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-68162.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
