/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,        
        {
            "name": "MTML",
            "type": "MTM",
            "io": "vu-dVRK/xml/sawRobotIO1394-MTML-foot-pedal-28056.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }        
    ]
    ,
    "psm-teleops":
    [
        {
            "type": "TELEOP_PSM",
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[ -1.0000,  0.0000,  0.0000],
                          [ 0.0000,  -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }    
    ]
}
