/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // this is to use our derived Teleop PSM, the name must
            // match the name the console would use,
            // i.e. <master>-<slave>
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSM",
                "class-name": "mtsDerivedTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            }
        ]
    }
    ,
    "io": {
        "footpedals": "sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-26372.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-28056.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }

    ]
    ,
    "psm-teleops":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using "type"
            "type": "TELEOP_PSM_DERIVED",
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[ 0.0000, -1.0000,  0.0000],
                          [ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
