/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTML.json"
            }
            ,
            {
                "shared-library": "sawKeyboard",
                "class-name": "mtsKeyboard",
                "constructor-arg": {
                    "Name": "Keyboard"
                }
                ,
                "configure-parameter": "sawKeyboard-dVRK-console.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "Keyboard",
            "interface": "OperatorPresent" // see file keyboard-dVRK-console.json
        }
        ,
        "clutch": {
            "component": "Keyboard",
            "interface": "Clutch"
        }
    }
    ,
    "arms":
    [
        {
            "name": "MTML",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTML"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM1",
            "configure-parameter" : {
                "scale": 0.5,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
