/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-Omega7-11245-MTML.json"
            }
         ]
    }
    ,
    "io":
    {
        "firewire-protocol": "broadcast-read-write",
        "footpedals": "sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTML",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTML"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM1-26332.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM1",
            "rotation" : [[ 0.0000, -1.0000,  0.0000],
                          [ 1.0000,  0.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
