/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSM",
                "class-name": "mtsDerivedTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            }
            ,
            // to use ForceDimension
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-Omega7-11245-MTML.json"
            }
            ,
            // this is just to get "foot pedals", no needed on a
            // physical dVRK system
            {
                "shared-library": "sawKeyboard",
                "class-name": "mtsKeyboard",
                "constructor-arg": {
                    "Name": "Keyboard"
                }
                ,
                "configure-parameter": "sawKeyboard-dVRK-console.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "Keyboard",
            "interface": "OperatorPresent" // see file keyboard-dVRK-console.json
        }
        ,
        "clutch": {
            "component": "Keyboard",
            "interface": "Clutch"
        }
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-26372.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTML"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using "type"
            "type": "TELEOP_PSM_DERIVED",
            "master": "MTML",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
